WorkflowBuilder(Version=2.9.0)
GroupWorkflow MetaData
    StringProperty(Value=GreenDome2)
    -> RigConfigs(MachineName=BLUE-OPTO-2)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    GroupWorkflow Declarations
        BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking
        BehaviorSubject<System.String> TrialSuccess
        BehaviorSubject<System.Boolean> SessionPaused

        IntProperty(Value=0)
        -> BehaviorSubject TrialCount

        DoubleProperty(Value=0)
        -> BehaviorSubject WaterDelivered

    GroupWorkflow HardwareDevices
        SubscribeSubject RigConfigs => #0
        -> PropertyMapping(PortName(Selector=COMPortTimestampGenerator)) => #1
        #1, #0 -> GroupWorkflow TimestampGenerator
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject inputs

            SubscribeSubject inputs => #3
            -> Unit
            -> Bonsai.Harp.SynchronizeTimestamp => #5
            Harp.TimestampGeneratorGen3.CreateMessage(MessageType=Write, Payload=Harp.TimestampGeneratorGen3.CreateTimerFrequencyPayload(TimerFrequency=Timer1000Hz)) => #6
            #5, #6 -> Merge => #7
            ExternalizedMapping(PortName) => #8
            #7, #8 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM16) => #9
            #9, #3 -> SubscribeWhen
            -> PublishSubject ClockSynchronizerEvents
            -> WorkflowOutput

            GroupWorkflow Timestamps
                SubscribeSubject ClockSynchronizerEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Bonsai.Harp.FilterRegister(FilterType=Include, Register=Bonsai.Harp.TimestampSeconds)
                -> PublishSubject Heartbeats

                SubscribeSubject ClockSynchronizerEvents
                -> Harp.TimestampGeneratorGen3.Parse(Register=Harp.TimestampGeneratorGen3.Timer)
                -> BehaviorSubject Timestamp => #6
                -> Take(Count=1) => #7
                #6, #7 -> WithLatestFrom
                -> Subtract
                -> BehaviorSubject Timebase
                -> WorkflowOutput

            SubscribeSubject inputs

        SubscribeSubject RigConfigs => #3
        -> PropertyMapping(PortName(Selector=COMPortBehaviourBoard)) => #4
        #4, #3 -> GroupWorkflow BehaviorBoards
            WorkflowInput Source1 => #0
            -> Disable Take(Count=1)
            -> Disable AsyncSubject inputs
            ExternalizedMapping(PortName) => #3
            #3, #0 -> GroupWorkflow BehaviorBoard
                ExternalizedMapping(Name(DisplayName=CommandsSubjectName, Description='The name of the input "commands" Subject', Category=Subjects))
                -> BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #1
                ExternalizedMapping(PortName, DumpRegisters, Heartbeat) => #2
                #1, #2 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=Off, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11) => #3
                WorkflowInput Source1 => #4
                #3, #4 -> SubscribeWhen => #5
                ExternalizedMapping(Name(DisplayName=EventsSubjectName, Description='The name of the output "Events" Subject', Category=Subjects)) => #6
                #5, #6 -> PublishSubject BehaviorEvents
                -> WorkflowOutput

            Disable SubscribeSubject inputs

            GroupWorkflow RunningWheel
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position)) => #1
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
                #0, #1, #2 -> Merge => #3
                ExternalizedMapping => #4
                  Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
                #3, #4 -> MulticastSubject BehaviorCommands => #5
                ExternalizedMapping => #6
                  Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
                -> SubscribeSubject BehaviorEvents => #7
                #5, #7 -> SubscribeWhen
                #6 -> SubscribeSubject BehaviorEvents
                -> DelaySubscription(DueTime=PT0.1S)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
                -> MemberSelector(Selector=Encoder)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
                  Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
                -> Accumulate => #15
                ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
                #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
                    Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
                    ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
                    -> IntProperty(Value=170)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
                      Expression: (it*Math.Pi)/10
                    -> PropertyMapping(Value) => #6
                    #2, #6 -> Multiply(Operand=FloatProperty(Value=53.407074))
                    -> WorkflowOutput
                ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
                #17, #18 -> PublishSubject WheelDistanceCm

            IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorCommands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=15
              PulseDO2=130
              PulseDO3=20
              BehaviorEventsSubjectName=BehaviorEvents
              TriggerPulseSubjectName=TriggerValve

            IncludeWorkflow
              Path=UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai
              Trigger0Frequency=50
              Trigger1Frequency=50
              BehaviorCommandsSubjectName=BehaviorCommands
              BehaviorEventsSubjectName=BehaviorEvents
              Camera0TriggerEventsSubjectName=Camera0TriggerEvents
              Camera1TriggerEventsSubjectName=Camera1TriggerEvents

            Disable IncludeWorkflow(Path=UclOpen.Devices:BehaviorBoard.Timestamps.bonsai, EventsSubjectName=BehaviorEvents, CommandsSubjectName=BehaviorCommands)

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT1S)
            -> MulticastSubject StartCameras

        GroupWorkflow LicketySplits
            SubscribeSubject RigConfigs => #0
            -> PropertyMapping(PortName(Selector=COMPortLicketySplitRight)) => #1
            #1, #0 -> GroupWorkflow LicketySplit
                ExternalizedMapping(Name(DisplayName=CommandsSubjectName, Description='The name of the input "commands" Subject', Category=Subjects)) => #0
                -> BehaviorSubject<Bonsai.Harp.HarpMessage> LickCommandsRight => #1
                ExternalizedMapping(PortName, DumpRegisters, Heartbeat) => #2
                #1, #2 -> AllenNeuralDynamics.LicketySplit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM13) => #3
                ExternalizedMapping(Name(DisplayName=EventsSubjectName, Description='The name of the output "Events" Subject', Category=Subjects)) => #4
                #3, #4 -> PublishSubject LickEventsRight => #5
                WorkflowInput Source1
                -> Take(Count=1)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #8
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
                #4 -> SubscribeSubject LickEventsRight
                -> Take(Count=1) => #12
                ExternalizedMapping(Channel0TriggerThreshold) => #13
                #12, #13 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0TriggerThresholdPayload(Channel0TriggerThreshold=0)) => #14
                ExternalizedMapping(Channel0UntriggerThreshold) => #15
                #14, #15 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0UntriggerThresholdPayload(Channel0UntriggerThreshold=0)) => #16
                #16, #14 -> Merge => #17
                #17, #0 -> MulticastSubject LickCommandsRight
                #4 -> SubscribeSubject LickEventsRight
                -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
                -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0)) => #21
                ExternalizedMapping => #22
                  Name
                    DisplayName=LickStateSubjectName
                    Description="The name of the subject that carries the state of the lick detector whenever it changes. HIGH when lick is detected, LOW when not."
                    Category=Subjects
                #21, #22 -> PublishSubject LickStateRight
            #0 -> PropertyMapping(PortName(Selector=COMPortLicketySplitLeft)) => #3
            #3, #0 -> GroupWorkflow LicketySplit
                ExternalizedMapping(Name(DisplayName=CommandsSubjectName, Description='The name of the input "commands" Subject', Category=Subjects)) => #0
                -> BehaviorSubject<Bonsai.Harp.HarpMessage> LickCommandsLeft => #1
                ExternalizedMapping(PortName, DumpRegisters, Heartbeat) => #2
                #1, #2 -> AllenNeuralDynamics.LicketySplit.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM15) => #3
                ExternalizedMapping(Name(DisplayName=EventsSubjectName, Description='The name of the output "Events" Subject', Category=Subjects)) => #4
                #3, #4 -> PublishSubject LickEventsLeft => #5
                WorkflowInput Source1
                -> Take(Count=1)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #8
                #5, #8 -> SubscribeWhen
                -> WorkflowOutput
                #4 -> SubscribeSubject LickEventsLeft
                -> Take(Count=1) => #12
                ExternalizedMapping(Channel0TriggerThreshold) => #13
                #12, #13 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0TriggerThresholdPayload(Channel0TriggerThreshold=0)) => #14
                ExternalizedMapping(Channel0UntriggerThreshold) => #15
                #14, #15 -> AllenNeuralDynamics.LicketySplit.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.LicketySplit.CreateChannel0UntriggerThresholdPayload(Channel0UntriggerThreshold=0)) => #16
                #16, #14 -> Merge => #17
                #17, #0 -> MulticastSubject LickCommandsLeft
                #4 -> SubscribeSubject LickEventsLeft
                -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
                -> Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0)) => #21
                ExternalizedMapping => #22
                  Name
                    DisplayName=LickStateSubjectName
                    Description="The name of the subject that carries the state of the lick detector whenever it changes. HIGH when lick is detected, LOW when not."
                    Category=Subjects
                #21, #22 -> PublishSubject LickStateLeft

        GroupWorkflow Cameras
            Disable Bonsai.Shaders.Timer(DueTime=PT1.5S)
            -> Disable AsyncSubject initCameras

            Disable SubscribeSubject RigConfigs => #2
            -> Disable MemberSelector(Selector=SerialNumberCamera1)
            -> GroupWorkflow TriggeredSpinnaker => #4
                Disable WorkflowInput Source1
                -> Disable Take(Count=1)
                -> Disable AsyncSubject SerialNumberCamera1

                Disable SubscribeSubject SerialNumberCamera1 => #3
                -> Disable Bonsai.Shaders.Delay(DueTime=PT1S) => #4
                ExternalizedMapping(ExposureTime, Gain, Binning, ColorProcessing, SerialNumber(DisplayName=SeriaNumber)) => #5
                #3 -> Disable PropertyMapping(SerialNumber(Selector=it)) => #6
                #4, #5, #6 -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=25366326, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #7
                #4 -> Disable Take(Count=1) => #8
                #7, #8 -> Disable SubscribeWhen => #9
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera1TriggerEvents
                -> MemberSelector(Selector=Seconds) => #12
                #9, #12 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #14
                ExternalizedMapping => #15
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #14, #15 -> BehaviorSubject FrameEvents1

                Disable WorkflowInput Source1
                -> Disable Bonsai.Shaders.Delay(DueTime=PT1S)
                -> Disable Unit => #19
                Disable ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing) => #20
                #19, #20 -> Disable UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=25366328, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #21
                Disable ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> Disable SubscribeSubject Camera1TriggerEvents
                -> Disable MemberSelector(Selector=Seconds) => #24
                #21, #24 -> Disable Zip
                -> Disable Bonsai.Harp.CreateTimestamped => #26
                Disable ExternalizedMapping => #27
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #26, #27 -> Disable BehaviorSubject FrameEvents2
            Disable SubscribeSubject initCameras => #5
            #4, #5 -> Disable SubscribeWhen
            #2 -> Disable MemberSelector(Selector=SerialNumberCamera2)
            -> Disable PropertyMapping(SerialNumber(Selector=it)) => #8
            #2 -> Disable Delay(DueTime=PT0.2S) => #9
            Source1=#8, Source1=#9 -> GroupWorkflow TriggeredSpinnaker => #10
                WorkflowInput Source1
                -> Disable Bonsai.Shaders.Delay(DueTime=PT1S)
                -> Disable Unit => #2
                ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing) => #3
                #2, #3 -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=25366328, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #4
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera1TriggerEvents
                -> MemberSelector(Selector=Seconds) => #7
                #4, #7 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #9
                ExternalizedMapping => #10
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #9, #10 -> BehaviorSubject FrameEvents2
            Disable SubscribeSubject initCameras => #11
            #10, #11 -> Disable SubscribeWhen
            #2 -> Disable MemberSelector(Selector=SerialNumberCamera3)
            -> Disable PropertyMapping(SerialNumber(Selector=it)) => #14
            #2 -> Disable Delay(DueTime=PT0.3S) => #15
            Source1=#14, Source1=#15 -> GroupWorkflow TriggeredSpinnaker => #16
                WorkflowInput Source1
                -> Disable Bonsai.Shaders.Delay(DueTime=PT1S)
                -> Disable Unit => #2
                ExternalizedMapping(ExposureTime, Gain, Binning, SerialNumber, ColorProcessing) => #3
                #2, #3 -> UclOpen.Video.TriggeredSpinnaker(Index=nil, SerialNumber=25366318, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #4
                ExternalizedMapping
                  Name
                    DisplayName=CameraTriggerEventsSubjectName
                    Description="The name of the subject carrying trigger events from a camera controller or behavior board. "
                    Category=Subjects
                -> SubscribeSubject Camera1TriggerEvents
                -> MemberSelector(Selector=Seconds) => #7
                #4, #7 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #9
                ExternalizedMapping => #10
                  Name(DisplayName=FrameEventsSubjectName, Description="The name of the subject to which indexed, timestamped camera frames are published", Category=Subjects)
                #9, #10 -> BehaviorSubject FrameEvents3
            Disable SubscribeSubject initCameras => #17
            #16, #17 -> Disable SubscribeWhen

        GroupWorkflow StepperDriver
            SubscribeSubject RigConfigs => #0
            -> PropertyMapping(StepperDriver1PortName(Selector=COMPortStepperDriver1), StepperDriver2PortName(Selector=COMPortStepperDriver2)) => #1
            #1, #0 -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> SubscribeWhen
                -> BehaviorSubject StepperDriver1Events
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #6
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #7
                #6, #7 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12) => #8
                #8, #3 -> SubscribeWhen
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn

                IntProperty(Value=0) => #2
                IntProperty(Value=0) => #3
                IntProperty(Value=0) => #4
                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                #2, #3, #4, #5, #6 -> Zip => #7
                -> BehaviorSubject StepperPosition_HOME
                #7 -> Delay(DueTime=PT3S) => #9
                Annotation "Init by Moving to ZERO"(Text="Init by Moving to ZERO") => #10
                #9, #10 -> BehaviorSubject StepperPositionCommand

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    IntProperty(Value=25) => #18
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #20
                    #18 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #22
                    #18 -> PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=200)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    IntProperty(Value=25) => #15
                    -> PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #17
                    #15 -> PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip
                -> WorkflowOutput

            GroupWorkflow MoveMotors
                SubscribeSubject StepperPositionCommand
                -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

                Disable BehaviorSubject
                -> Disable BehaviorSubject
                -> Disable BehaviorSubject

    SubscribeSubject RigConfigs => #6
    -> PropertyMapping(FileName(Selector=MeshMapFilePath)) => #7
    ExternalizedMapping(DisplayDevice) => #8
    #7, #6, #8 -> GroupWorkflow BonvisionResources
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=#7F7F7F
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=#7F7F7F, FileName=C:\RigConfigs\MeshMap.csv) => #8
        WorkflowInput Source1
        -> Take(Count=1) => #10
        #8, #10 -> SubscribeWhen

    GroupWorkflow Audio
        ExternalizedMapping(BackgroundPath(Category="Audio Paths"), GoCuePath(Category="Audio Paths"), PinkNoisePath(Category="Audio Paths"))
        -> GroupWorkflow LoadAudioFiles
            ExternalizedMapping(FileName(DisplayName=GoCuePath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\go_cue.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject waveformGoCue

            ExternalizedMapping(FileName(DisplayName=BackgroundPath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\background_white_noise.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject waveformBackground

            ExternalizedMapping(FileName(DisplayName=PinkNoisePath))
            -> Bonsai.Audio.AudioReader(FileName=C:\dev\av-dome\src\LocalFiles\filtered_pink_pulse.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> AsyncSubject waveformPinkNoise

        Disable GroupWorkflow ConstructWaveforms
            SubscribeSubject background
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.05))
            -> AsyncSubject AudioBackgroundAll

            SubscribeSubject pink
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #10
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #12
            #10, #12 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.02))
            -> AsyncSubject AudioPinkAll

            SubscribeSubject goCue
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #18
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #20
            #18, #20 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.02))
            -> AsyncSubject AudioGoCueAll

        GroupWorkflow SpeakerLocations
            Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #1
            Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #3
            Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #5
            #1, #3, #5 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        Disable GroupWorkflow ManualControls
            Bonsai.Windows.Input.KeyDown(Filter=Space, SuppressRepetitions=false)
            -> BooleanProperty(Value=true)
            -> MulticastSubject StartAuditoryStimulus

            Bonsai.Windows.Input.KeyDown(Filter=G, SuppressRepetitions=false)
            -> BooleanProperty(Value=true)
            -> MulticastSubject StartAuditoryGoCue

        GroupWorkflow MixerDevice => #5
            Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, SuggestedLatency=0.01)
            -> Bonsai.Mixer.StartMixer
            -> BehaviorSubject Mixer
            -> WorkflowOutput

            BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #4
            SubscribeSubject Mixer
            -> PropertyMapping(Mixer) => #6
            #4, #6 -> Bonsai.Mixer.QueueBuffer
        Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #6
        #5, #6 -> DelaySubscription(DueTime=PT5S)

        ExternalizedMapping(Value(DisplayName=ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=30)
        -> BehaviorSubject ActiveSoundChannels

        BehaviorSubject<System.Boolean> StartAuditoryStimulus
        -> SelectMany PlayStim
            SubscribeSubject waveformPinkNoise
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32) => #5
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            #5, #9 -> ChannelActivation(Channels(int=2), Gain(double=0.02))
            -> MulticastSubject MixerBuffer

        BehaviorSubject<System.Boolean> StartAuditoryGoCue
        -> SelectMany PlayGo
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name(DisplayName=WaveformSubjectName))
            -> SubscribeSubject AudioGoCueAll => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject MixerBuffer
            -> WorkflowOutput

            SubscribeSubject waveformGoCue
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #9
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #11
            #9, #11 -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels="", Gain(double=0.02))
            -> AsyncSubject AudioGoCueAll

        Annotation "Currently only works with function generator"(Text="Currently only works with function generator")
        -> Annotation "Constant auditory background signal"(Text="Constant auditory background signal")
        -> Disable SubscribeSubject AudioBackgroundAll
        -> Defer PlayBackground
            SubscribeSubject waveformBackground
            -> Take(Count=1)
            -> Envelope(AttackDuration=0.001, ReleaseDuration=0.001, SampleRate=44100) => #2
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #4
            #2, #4 -> Broadcast(ChannelCount=32) => #5
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            #5, #9 -> ChannelActivation(Channels(int=30), Gain(double=0.02))
            -> WorkflowOutput
        -> MulticastSubject MixerBuffer

GroupWorkflow InitialiseTrials
    Annotation "Read Schema defining what makes valide trial settings"(Text="Read Schema defining what makes valide trial settings")
    -> Bonsai.IO.ReadAllText(Path=C:\dev\av-dome\schemas\session.yml)
    -> DataSchema.DeserializeFromYaml(Type=TypeMapping<DataSchema.AvTask>)
    -> AsyncSubject TrialConfig

    Annotation "Initialized first trial"(Text="Initialized first trial")
    -> SubscribeSubject TrialConfig
    -> TrialTypeInitialise(autoRewardProbability=0.8, RewardSizeInUl=4, Seed=0, trainingStageId=0, TrialType=0, WasCorrect=false, WasTimeout=false)
    -> BehaviorSubject thisTrialData

GroupWorkflow GUI
    BooleanProperty(Value=false)
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.ToggleButtonBuilder Start(Enabled=true, Visible=true, Text="Start / Pause", Checked=true) => #2
    -> BehaviorSubject StartSession
    Bonsai.Gui.LabelBuilder MouseID(Enabled=true, Visible=true, Text=MouseID)
    -> VisualizerMapping => #5
    Bonsai.Gui.ComboBoxBuilder "Mouse ID"(Enabled=true, Visible=true, Items(string=1001, string=1002, string=1003, string=1004), SelectedItem=1001)
    -> VisualizerMapping => #7
    Bonsai.Gui.LabelBuilder TrainingStage(Enabled=true, Visible=true, Text=TrainingStage)
    -> VisualizerMapping => #9
    Bonsai.Gui.ComboBoxBuilder Training(Enabled=true, Visible=true, Items(string="Stage A", string="Stage B", string="Stage C", string="Stage D"), SelectedItem="Stage A")
    -> VisualizerMapping => #11
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #13
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #15
    Bonsai.Gui.LabelBuilder TargetSide(Enabled=true, Visible=true, Text=TargetSide)
    -> VisualizerMapping => #17
    SubscribeSubject thisTrialData => #18
    -> MemberSelector(Selector=targetSide)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder TargetSide(Enabled=true, Visible=true, Text=Right, Multiline=false)
    -> VisualizerMapping => #22
    Bonsai.Gui.LabelBuilder TrialType(Enabled=true, Visible=true, Text=TrialType)
    -> VisualizerMapping => #24
    #18 -> MemberSelector(Selector=trialType)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder TrialType(Enabled=true, Visible=true, Text=0, Multiline=false)
    -> VisualizerMapping => #29
    Bonsai.Gui.LabelBuilder VisualLocation(Enabled=true, Visible=true, Text=VisualLocation)
    -> VisualizerMapping => #31
    #18 -> MemberSelector(Selector=visualAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder VisualLocationX(Enabled=true, Visible=true, Text=60, Multiline=false)
    -> VisualizerMapping => #36
    Bonsai.Gui.LabelBuilder AuditoryLocation(Enabled=true, Visible=true, Text=AuditoryLocation)
    -> VisualizerMapping => #38
    #18 -> MemberSelector(Selector=audioAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder AudioLocationX(Enabled=true, Visible=true, Text=0, Multiline=false)
    -> VisualizerMapping => #43
    Bonsai.Gui.LabelBuilder "Water Delivered in ul"(Enabled=true, Visible=true, Text="Water Delivered in ul")
    -> VisualizerMapping => #45
    SubscribeSubject WaterDelivered
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder "Water Delivered in ul"(Enabled=true, Visible=true, Text=0, Multiline=false)
    -> VisualizerMapping => #50
    #5, #7, #9, #11, #13, #15, #17, #22, #24, #29, #31, #36, #38, #43, #45, #50 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=8, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #54
    #2 -> VisualizerMapping => #55
    SubscribeSubject FrameEvents1
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #59
    SubscribeSubject FrameEvents2
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #63
    SubscribeSubject FrameEvents3
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #67
    SubscribeSubject WheelDistanceCm
    -> SampleInterval(Interval=PT0.5S) => #69
    -> Skip(Count=1) => #70
    #70, #69 -> Zip
    -> Subtract
    -> Multiply(Operand=DoubleProperty(Value=1))
    -> VisualizerMapping => #74
    Annotation PhotodiodeSignal(Text=PhotodiodeSignal)
    -> SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #77
    -> MemberSelector(Selector=Seconds) => #78
    #77 -> MemberSelector(Selector=Value)
    -> Equal(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> Condition => #81
        WorkflowInput Source1
        -> WorkflowOutput
    #78, #81 -> Sample => #82
    -> Skip(Count=1) => #83
    #83, #82 -> Zip
    -> Subtract
    -> Bonsai.Numerics.Abs
    -> VisualizerMapping => #87
    #59, #63, #67, #74, #87 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=3
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #91
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateLeft
    -> Disable Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.CheckBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 9.75pt", Text="Left Response", Checked=false)
    -> VisualizerMapping => #97
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateRight
    -> Disable Equal(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.CheckBoxBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 9.75pt", Text="Right Response", Checked=false)
    -> VisualizerMapping => #103
    #97, #103 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #107
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #109
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #111
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #115
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="4900,3400,2150,3350,2150;")
    -> VisualizerMapping => #120
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #123
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #127
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #129
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #132
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #135
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #138
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #140
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #143
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #146
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #148
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #151
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #153
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #156
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #158
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text=ZERO)
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #161
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #164
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #167
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #169
    Bonsai.Gui.LabelBuilder StepSize(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #171
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #173
    SubscribeSubject StepperStepSize
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=150, Multiline=false) => #178
    -> VisualizerMapping => #179
    #109, #111, #115, #120, #123, #127, #129, #132, #135, #138, #140, #143, #146, #148, #151, #153, #156, #158, #161, #164, #167, #169, #171, #173, #179 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #183
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text="Left Valve")
    -> VisualizerMapping => #185
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text="Right Valve")
    -> VisualizerMapping => #187
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #190
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #193
    #185, #187, #190, #193 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #197
    #54, #55, #91, #107, #183, #197 -> Bonsai.Gui.TableLayoutPanelBuilder "AV Dome"
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=6
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=6)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=3)
        CellSpan(ColumnSpan=1, RowSpan=1)
    #178 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    Defer RunningPerformanceBuffer
        SubscribeSubject TrialSuccess
        -> Condition NotNoResponse
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Equal(Operand=StringProperty(Value=Correct))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Convert.ToSingle(it)
        Annotation PerformanceSlidingWindow(Text="Consider replacing this with an input parameter from schema / yml")
        -> IntProperty(Value=10) => #5
        #3, #5 -> WithLatestFrom
        -> GroupWorkflow GetAverage
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #3
            #1, #3 -> BufferCount(Count=10, Skip=1) => #4
            -> Add => #5
            #4 -> MemberSelector(Selector=Count) => #6
            #5, #6 -> Zip
            -> Divide
            -> WorkflowOutput
        -> WorkflowOutput
    -> PublishSubject RunningPerformance

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")

        GroupWorkflow "Internal Position Update"(Description="Internal Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn => #13
            Annotation "Sends command with every update"(Text="Sends command with every update") => #14
            #13, #14 -> MulticastSubject StepperPositionCommand => #15
            GroupWorkflow "Init Positions"(Description="Init Positions") => #16
                Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> IntProperty(Value=4900)
                -> BehaviorSubject Motor1_Position => #2
                Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> IntProperty(Value=3400)
                -> BehaviorSubject Motor2_Position => #5
                Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> IntProperty(Value=2150)
                -> BehaviorSubject Motor3_Position => #8
                Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> IntProperty(Value=3350)
                -> BehaviorSubject Motor4_Position => #11
                Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> IntProperty(Value=2150)
                -> BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Merge
                -> WorkflowOutput
            #15, #16 -> SubscribeWhen
            #3 -> Subtract(Operand=IntProperty(Value=1000)) => #18
            #5 -> Subtract(Operand=IntProperty(Value=1000)) => #19
            #1, #18, #19, #7, #9 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")

        GroupWorkflow "Position Callbacks"(Description="Position Callbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")

        SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

GroupWorkflow Logging
    IncludeWorkflow(Path=UclOpen.Logging:LogController.bonsai, SubjectId=Algernon, SessionId=001, Path=C:\Data)

    GroupWorkflow TrialParameters
        SubscribeSubject ResponseData
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression:
            new (
            it.Item2 as Response,
            it.Item1 as CorrectReponse
            )
        SubscribeSubject thisTrialData => #2
        #1, #2 -> Zip
        -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=UclOpen.Logging:LogData.bonsai, LogName=TrialSettings, Selector="", Extension=csv)
        -> WorkflowOutput

    GroupWorkflow BehaviorBoard
        SubscribeSubject BehaviorEvents
        -> GroupWorkflow ExcludeAnalogDataMaybe
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
            -> BooleanProperty(Value=false) => #2
            #0, #2 -> WithLatestFrom => #3
            -> Condition Flagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
            #3 -> Condition NotFlagged
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #8
            #6, #8 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName="")
        -> WorkflowOutput

    GroupWorkflow Cameras
        SubscribeSubject FrameEvents1
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera1.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera1.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents2
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera2.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera2.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents3
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera3.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=C:\Data\sub-Algernon\ses-001_date-2026-05-25T16-38-16\Cameras\VideoData_Camera3.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

    Disable GroupWorkflow Audio
        SubscribeSubject AudioTrigger
        -> StringProperty(Value=AudioTrigger)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=C:\dev\CoenLab\bonsai-workflows\logging\LogData.bonsai, LogName="", Selector="Seconds,Value", Extension=csv)
        -> WorkflowOutput

    GroupWorkflow LicketySplit
        SubscribeSubject LickEventsLeft
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitLeft)

        SubscribeSubject LickEventsRight
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitRight)

    SubscribeSubject ClockSynchronizerEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=TimestampGenerator)

Disable SubscribeSubject FrameEvents1
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera1) => #7
Disable SubscribeSubject FrameEvents2
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera2) => #10
Disable SubscribeSubject FrameEvents3
-> Disable IncludeWorkflow(Path=Extensions\DroppedFramesMonitor.bonsai)
-> Disable StringProperty(Value=Camera3) => #13
#7, #10, #13 -> Disable Merge
-> Disable Bonsai.IO.CsvWriter(FileName=C:\testdata\droppedFrames.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=it)

SubscribeSubject ResponseData => #16
SubscribeSubject TrialSuccess => #17
#16, #17 -> Zip
-> SelectMany RedefineTrialData
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject source

    SubscribeSubject source => #3
    ExternalizedMapping(Seed, WasCorrect) => #4
    #3, #4 -> SelectMany RedefineTrial
        SubscribeSubject TrialConfig => #0
        ExternalizedMapping(Seed, WasCorrect) => #1
        #0, #1 -> TrialTypeInitialise(autoRewardProbability=0.8, RewardSizeInUl=4, Seed=-1, trainingStageId=0, TrialType=-1, WasCorrect=true, WasTimeout=false) => #2
        -> WorkflowOutput
        #2 -> MemberSelector(Selector=visualAzimuth)
        #2 -> MemberSelector(Selector=audioAzimuth)

        WorkflowInput Source1
    -> Take(Count=1)
    -> WorkflowOutput
-> MulticastSubject thisTrialData
-> MemberSelector(Selector=RepeatCount)

Disable SubscribeSubject StartSession => #22
Disable SubscribeSubject SessionPaused => #23
#22, #23 -> Disable CombineLatest

SubscribeSubject thisTrialData
-> SelectMany ExecuteTrial => #26
    WorkflowInput Source1
    -> AsyncSubject trial

    PublishSubject<System.String> StopStimuli

    SubscribeSubject trial
    -> SelectMany StimuliPresentation
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings

        Annotation "Auditory Stimulus"(Text="Auditory Stimulus")
        -> SubscribeSubject settings
        -> SelectMany "Define Speaker location"
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=audioAzimuth)
            -> PropertyMapping(X) => #2
            Source2=#2 -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0) => #3
            SubscribeSubject SpeakerLocations
            -> PropertyMapping(Locations) => #5
            #3, #5 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
            -> MulticastSubject ActiveSoundChannels => #7
            WorkflowInput Source1 => #8
            #7, #8 -> Sample
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryStimulus

        Annotation "Visual Stimulus"(Text="Visual Stimulus")
        -> SubscribeSubject settings
        -> SelectMany FlashingVisualStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trialSettings

            SubscribeSubject DrawStimuli => #3
            Annotation 16Hz(Text=16Hz)
            -> Annotation 16Hz(Text=16Hz) => #5
            SubscribeSubject trialSettings
            -> MemberSelector(Selector=visualFlickerFrequency) => #7
            Annotation "Double freq for On/Off"(Text="Double freq for On/Off") => #8
            #7, #8 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 / (2 * it))
            -> PropertyMapping(DueTime) => #10
            #5, #10 -> Bonsai.Shaders.Timer(DueTime=PT0.063S, Period=PT0.0625S)
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #12
            #3, #12 -> WithLatestFrom => #13
            -> MemberSelector(Selector=Item1) => #14
            #13 -> MemberSelector(Selector=Item2) => #15
            Annotation "Makes it 8Hz"(Text="Makes it 8Hz") => #16
            #15, #16 -> Condition => #17
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> WorkflowOutput
            #14, #17 -> Sample => #18
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #19
            #18, #19 -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=125
              LocationY=-20
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Annotation "Either Response or Timeout"(Text="Either Response or Timeout")
            -> SubscribeSubject StopStimuli => #22
            #20, #22 -> TakeUntil => #23
            Annotation "GratingSettings from Schema"(Text="GratingSettings from Schema")
            -> SubscribeSubject trialSettings
            -> PropertyMapping => #26
              LocationX(Selector=visualAzimuth)
              Contrast(Selector=visualContrast)
              LocationY(Selector=visualElevation)
              TemporalFrequency(Selector=visualTemporalFrequency)
              SpatialFrequency(Selector=visualSpatialFrequency)
              Angle(Selector=visualOrientation)
              Phase(Selector=visualPhase)
            Annotation "Extend in deg"(Text="Extend in deg")
            -> Annotation "Large enough so you dont see any edges"(Text="Large enough so you dont see any edges")
            -> Annotation "100 makes rel. numbers below easier!"(Text="100 makes rel. numbers below easier!")
            -> FloatProperty(Value=100) => #30
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #31
            Disable Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg")
            -> Disable FloatProperty(Value=9) => #33
            SubscribeSubject trialSettings => #34
            Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg") => #35
            #34, #35 -> MemberSelector(Selector=visualGaussianWindowSigma) => #36
            #33, #36 -> Multiply(Operand=FloatProperty(Value=2)) => #37
            #37, #30 -> Zip => #38
            Annotation RelativeSigma(Text=RelativeSigma) => #39
            #38, #39 -> Divide
            -> PropertyMapping(Aperture(Selector=it)) => #41
            Annotation "Norm. 1: full size of ExtentX/Y"(Text="Norm. 1: full size of ExtentX/Y")
            -> FloatProperty(Value=1)
            -> PropertyMapping(Radius) => #44
            #18, #26, #31, #41, #44 -> IncludeWorkflow => #45
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=60
              LocationY=15
              Layer=0
              ExtentX=100
              ExtentY=100
              SpatialFrequency=0.06666667
              TemporalFrequency=0
              Phase=276.488159
              Angle=0
              SquareWave=false
              Contrast=0.1
              DutyCycle=nil
              Radius=1
              Aperture=0.3
              Opacity=1
            #45, #22 -> TakeUntil => #46
            #23, #46 -> Zip
            -> WorkflowOutput

    SubscribeSubject trial
    -> MemberSelector(Selector=openLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT0.5S)
    -> SelectMany SendSpoutInCommand
        WorkflowInput Source1 => #0
        Annotation MoveToInPosition(Text=MoveToInPosition)
        -> SubscribeSubject StepperPosition_BothIn
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> SubscribeWhen
        -> WorkflowOutput
    -> Disable SelectMany PlayGoCue => #11
        SubscribeSubject goCue => #0
        -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on Speakers (Realtek(R) Audio)", SampleRate=44100, State=Playing)
        -> Disable WorkflowOutput
        #0 -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryGoCue
        -> WorkflowOutput
    SubscribeSubject trial => #12
    Annotation ResponseWindowInSec(Text=ResponseWindowInSec) => #13
    #12, #13 -> MemberSelector(Selector=closedLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #16
    #11, #16 -> SelectMany Response
        SubscribeSubject LickEventsLeft => #0
        SubscribeSubject trial
        -> MemberSelector(Selector=autoReward) => #2
        #0, #2 -> WithLatestFrom
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=Left) => #5
        SubscribeSubject LickEventsRight => #6
        #6, #2 -> WithLatestFrom
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=Right) => #9
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S) => #11
        #11, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #13
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #15
        #13 -> Condition AutoRewarded?
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value=AutoRewarded) => #17
        #5, #9, #15, #17 -> Merge
        -> Take(Count=1) => #19
        -> MulticastSubject TrialSuccess => #20
        #19 -> MulticastSubject StopStimuli => #21
        #20, #21 -> Merge
        -> WorkflowOutput
    -> SelectMany ApplyConsequences
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #1
        WorkflowInput Source1 => #2
        #1, #2 -> WithLatestFrom => #3
        -> Condition HIT => #4
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1) => #1
            #0 -> MemberSelector(Selector=Item2) => #2
            #1, #2 -> Zip
            -> Equal => #4
            #0 -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot => #6
            #4, #6 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Condition Left
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item1)
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4 -> Condition Right
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item1)
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> IntProperty(Value=2) => #8
        #6, #8 -> Merge => #9
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToDouble(it > 2)
        -> PropertyMapping(Count) => #13
        #9, #13 -> SelectMany "Deliver Reward" => #14
            SubscribeSubject WaterDelivered => #0
            SubscribeSubject trial
            -> MemberSelector(Selector=RewardSizeInUl) => #2
            #0, #2 -> Zip
            -> Add => #4
            WorkflowInput Source1 => #5
            Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #6
            #5, #6 -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S) => #8
            ExternalizedMapping(Count) => #9
            #8, #9 -> RepeatCount(Count=1) => #10
            #4, #10 -> SubscribeWhen
            -> MulticastSubject WaterDelivered
            #10 -> WorkflowOutput
        Annotation "Give Animal 1s to drink"(Text="Give Animal 1s to drink") => #15
        #14, #15 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> StringProperty(Value=Correct) => #17
        #3 -> Condition INCORRECT
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1) => #1
            #0 -> MemberSelector(Selector=Item2)
            -> Condition "Filter for Left and Right" => #3
                WorkflowInput Source1 => #0
                -> Equal(Operand=StringProperty(Value=Left)) => #1
                #0 -> Equal(Operand=StringProperty(Value=Right)) => #2
                #1, #2 -> Zip
                -> BitwiseOr
                -> WorkflowOutput
            #1, #3 -> Zip
            -> Equal
            -> BitwiseNot => #6
            #0 -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot => #8
            #6, #8 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect)
        -> SelectMany Timeout => #20
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S)
            -> Take(Count=1) => #2
            WorkflowInput Source1 => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #3 -> Condition MISS
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse)) => #2
            #0 -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot => #4
            #2, #4 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse)
        -> SelectMany Timeout => #23
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S)
            -> Take(Count=1) => #2
            WorkflowInput Source1 => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
            -> Disable SubscribeSubject TrialConfig
            -> Disable MemberSelector(Selector=Quiescence.Timeout)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
        #3 -> Condition Left
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1)
            -> Equal(Operand=StringProperty(Value=Left)) => #2
            #0 -> MemberSelector(Selector=Item1.Item2) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> IntProperty(Value=1) => #25
        #3 -> Condition Right
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1)
            -> Equal(Operand=StringProperty(Value=Right)) => #2
            #0 -> MemberSelector(Selector=Item1.Item2) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> IntProperty(Value=2) => #27
        #25, #27 -> Merge => #28
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToDouble(it > 2)
        -> PropertyMapping(Count) => #32
        #28, #32 -> SelectMany "Deliver Reward" => #33
            SubscribeSubject WaterDelivered => #0
            SubscribeSubject trial
            -> MemberSelector(Selector=RewardSizeInUl) => #2
            #0, #2 -> Zip
            -> Add => #4
            WorkflowInput Source1 => #5
            Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #6
            #5, #6 -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S) => #8
            ExternalizedMapping(Count) => #9
            #8, #9 -> RepeatCount(Count=1) => #10
            #4, #10 -> SubscribeWhen
            -> MulticastSubject WaterDelivered
            #10 -> WorkflowOutput
        Annotation "Give Animal 1s to drink"(Text="Give Animal 1s to drink") => #34
        #33, #34 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> StringProperty(Value=AutoRewarded) => #36
        #17, #20, #23, #36 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Disable SelectMany SendSpoutOutCommand => #19
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_BothOut
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> SubscribeWhen
        -> WorkflowOutput
    SubscribeSubject TrialCount
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialCount => #23
    #19, #23 -> Zip
    -> SelectMany ITI
        WorkflowInput Source1 => #0
        SubscribeSubject trial
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(ITI)
        -> PropertyMapping(DueTime) => #3
        #0, #3 -> Bonsai.Shaders.Delay(DueTime=PT2.406S)
        -> WorkflowOutput
    -> WorkflowOutput
Annotation => #27
  Text:
    Here we have the trial number and the reponse code.
    Things we want to do with this:

    1. Different outcomes depending on response,
            # Incorrect, then we have a timeout
            # Correct, valve trigger


    1. Track performance and visualise in the gui
            Track actual response (0/-1/1) of last 50 trials
            Running performance over 20 responsive trials (True/False)
#26, #27 -> BehaviorSubject ResponseData => #28
Annotation "This fires at declaration, so skip"(Text="This fires at declaration, so skip")
-> SubscribeSubject StartSession
-> Skip(Count=1)
-> Condition => #32
    WorkflowInput Source1
    -> WorkflowOutput
#28, #32 -> SubscribeWhen
